PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = experiment
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will do n-back test. Have fun.

        first trial
        press space to start trial
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    RoutineSettingsComponent Trial
      stopVal [duration (s)] = 3
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    CodeComponent code_gpt
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string

        all_letters = list(string.ascii_uppercase)
        random.shuffle(all_letters)  # Shuffle the order of letters

        nback = ''
        stimulus = ''
        nloop_text = '0'
        presented = []
      Begin Routine:
        n = 2
        # Randomly decide if this will be a match trial (n-back match)
        if random.choice([True, False]):
            # Add the same letter again to make it a n-back match
            all_letters.append(all_letters[-n])

        loop = trials.thisRepN + 1
        if loop > n:
            nback = presented[-n]
        stimulus = all_letters.pop()
        presented.append(stimulus)
        if nback == stimulus:
            correctAns = ['space']
        else:
            correctAns = None
        nloop_text = str(loop)
    TextComponent stimulus_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent nloop
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nloop_text
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    VariableComponent letter
      startRoutineValue = $stimulus
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    VariableComponent nback
      startRoutineValue = $nback
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  Routine Thanks
    RoutineSettingsComponent Thanks
      saveStartStop = False
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    TextComponent thx_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thats all, thanks
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine Trial
  LoopTerminator trials
  Routine Thanks
